<?xml version="1.0" standalone="no"?>
<monkeyml version="1.0">
    <io_devices tag="IO Devices">
        <iodevice type="fd_haptic_device" tag="Force Dimension Haptic Device" pos_x="pos_x" pos_y="pos_y" pos_z="pos_z">
            <iochannel type="fd_haptic_device_fixed_force" tag="FDHD Fixed Force" f_x="f_x" f_y="f_y" f_z="f_z" active="active"></iochannel>
        </iodevice>
    </io_devices>
    <variables tag="Variables">
        <variable tag="pos_x" scope="global" logging="when_changed" default_value="0" type="float"></variable>
        <variable tag="pos_y" scope="global" logging="when_changed" default_value="0" type="float"></variable>
        <variable tag="pos_z" scope="global" logging="when_changed" default_value="0" type="float"></variable>
        <variable tag="f_x" scope="global" logging="when_changed" default_value="0" type="float"></variable>
        <variable tag="f_y" scope="global" logging="when_changed" default_value="0" type="float"></variable>
        <variable tag="f_z" scope="global" logging="when_changed" default_value="0" type="float"></variable>
        <variable tag="active" scope="global" logging="when_changed" default_value="1" type="integer"></variable>
        <variable tag="stop" scope="global" logging="when_changed" default_value="0" type="integer"></variable>
    </variables>
    <sounds tag="Sounds"></sounds>
    <stimuli tag="Stimuli">
        <stimulus type="frame_list" tag="cursor" stimulus_group="cursor_frames" ended="" loop="1" autoplay="1"></stimulus>
        <stimulus_group tag="cursor_frames">
            <stimulus type="rectangle" tag="rectangle" color="1,0,0" x_size="2" y_size="2" x_position="pos_x" y_position="pos_y" rotation="0" alpha_multiplier="1"></stimulus>
        </stimulus_group>
    </stimuli>
    <filters tag="Filters"></filters>
    <optimizers tag="Optimizers"></optimizers>
    <experiment tag="New Experiment" full_name="" description="">
        <protocol tag="New Protocol" nsamples="1" sampling_method="cycles" selection="sequential" interruptible="YES">
            <task_system tag="New Task System" interruptible="YES">
                <task_system_state tag="Begin State System" interruptible="YES">
                    <action_marker _unmoveable="1" tag="Actions"></action_marker>
                    <action type="assignment" tag="Reset pos_x" variable="pos_x" value="0"></action>
                    <action type="assignment" tag="Reset pos_y" variable="pos_y" value="0"></action>
                    <action type="assignment" tag="Reset stop" variable="stop" value="0"></action>
                    <action tag="Live Queue Stimulus" type="live_queue_stimulus" stimulus="cursor"></action>
                    <action tag="Update Stimulus Display" type="update_stimulus_display"></action>
                    <action tag="Start IO Device" type="start_device_IO" device="Force Dimension Haptic Device"></action>
                    <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                    <transition type="conditional" tag="If Condition is True, Transition to ..." condition="stop" target="Exit State System"></transition>
                </task_system_state>
                <task_system_state tag="Exit State System" interruptible="YES">
                    <action_marker _unmoveable="1" tag="Actions"></action_marker>
                    <action tag="Stop IO Device" type="stop_device_IO" device="Force Dimension Haptic Device"></action>
                    <action tag="Dequeue Stimulus" type="dequeue_stimulus" stimulus="cursor"></action>
                    <action tag="Update Stimulus Display" type="update_stimulus_display"></action>
                    <transition_marker _unmoveable="1" tag="Transitions"></transition_marker>
                    <transition tag="Return to parent task system" type="yield"></transition>
                </task_system_state>
            </task_system>
        </protocol>
    </experiment>
</monkeyml>